PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '00', 'Gender': 'm/f'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Emotion_go_nogo
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instruction
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    TextComponent instruction_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Hello! Welcome to the experiment.
        In this task, a square will be displayed on the screen. Your goal is to respond based on its color:

        Press "N" for a BLUE square.
        Press "X" for a RED square.

        Occasionally, the square will be followed by a stop signal (a square). When this happens, you must withhold your response and NOT press any key. Respond as quickly as possible to the Go signals. Do not wait to see if a stop signal appears.

        Press SPACE to begin.
    KeyboardComponent start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instruction2
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    TextComponent instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before the actual experiment begins, this is a practice block to help you get familiar with the task. Use this time to ensure you understand the instructions and respond as quickly and accurately as possible.

        Feedback will be displayed after each trial in practice block but it will not be displayed in the actual experiment.
    KeyboardComponent start_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Image
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    CodeComponent code_1
      Code Type = Auto->JS
    ImageComponent image
      image [set every repeat] = $emo_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine feedback
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Final feedback values
        feedback_commission_errors = feedback_commission_errors
        feedback_omission_errors = feedback_omission_errors
        feedback_discrimination_errors = feedback_discrimination_errors
    TextComponent OE
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Omission Errors (No response was made when one was required) = " + str(feedback_omission_errors)
      wrapWidth = 1.5
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    TextComponent DE
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Discrimination Errors (A wrong key was pressed instead of the correct one) = " + str(feedback_discrimination_errors)
      wrapWidth = 1.5
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    TextComponent CE
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Commission Errors (A key was pressed when it shouldn’t have been) = " + str(feedback_commission_errors)
      wrapWidth = 1.5
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    TextComponent practice_end
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The practice block was to help understand the experiment. If white square (signal) appears, refrain from responding. Both your accuracy and speed will be measured so do not wait for signal to appear and be as accurate as possible. Rules are as follows:

        Press "N" for a BLUE square.
        Press "X" for a RED square.

        Press space if you are ready to start the actual experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for being a part of this experiment.

        Press SPACE to end the experiment.
    KeyboardComponent end_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        import random
        from psychopy import event

        df = pd.read_excel("condition.xlsx")

        num_trials= 60
        num_go_trials = 45
        num_stop_trials = 15
        num_images_per_emotion = 20
        trial_data = []
      Begin Experiment:
        stop_signal_trials = {}
        trial_list = []
        omission_errors = 0
        commission_errors = 0
        discrimination_errors = 0
        trial_index = 0
        win.callOnFlip(event.clearEvents, eventType='keyboard')  # clear events on next flip
        for emo in ["anger", "disgust", "neutral"]:
            images = df[df["Emotion"] == emo]["ImageFile"].tolist()

            images = images[:20]  # Duplicate images if needed to reach 20
            random.shuffle(images)

            go_images = images[:15]  # 15 "Go" trials
            stop_images = images[15:20]  # 5 "Stop" trials

            # Create trials
            go_trials = [(emo, img, "Go") for img in go_images]
            stop_trials = [(emo, img, "Stop") for img in stop_images]

            # Store trials
            trial_list.extend(go_trials + stop_trials)

            # Mark Stop trials in dictionary
            for img in stop_images:
                stop_signal_trials[img] = True

        # Shuffle the entire trial list
        random.shuffle(trial_list)
        trial_list_final = trial_list * 4
        random.shuffle(trial_list_final)
      Begin Routine:
        # Inside the Begin Routine tab or the corresponding section of the experiment:
        event.clearEvents()
        key_resp_clock = core.Clock()  # Create the clock object
        key_resp_clock.reset()  # Reset the clock to start counting from 0

        if trial_index < len(trial_list_final):
            selected_emo, emo_image, selected_trial_type = trial_list_final[trial_index]
            image_2.setImage(emo_image)
        else:
            trials.finished = True  # End loop

        # Determine stop signal visibility
        if selected_trial_type == "Stop":
            poly3.opacity = 1
        else:
            poly3.opacity = 0

        if random.random() < 0.5:
            shade = 'blue'
        else:
            shade = 'red'

        if poly3.opacity == 1:
            corr_key = None
        elif poly3.opacity == 0:
            if shade == 'blue':
                corr_key = 'n'
            else:
                corr_key = 'x'
      End Experiment:
        # Convert to DataFrame and save to CSV
        participant_id = expInfo['participant']
        filename = f"trial_data_{participant_id}.csv"
        save_dir = "D:/UNI/Year 3/END-SEM/PSY416/solo/experiment/clean_data"
        full_path = f"{save_dir}/{filename}"

        # Convert trial_data list of dicts to a DataFrame
        trial_df = pd.DataFrame(trial_data)
        try:
            trial_df.to_csv(full_path, index=False)
            print(f"✅ Saved to: {full_path}")
        except:
            trial_df.to_csv(filename, index=False)
      End Routine:
        trial_index += 1
        if poly3.opacity == 1:  # No-go trial
            if key_resp.keys is not None:  # If any key was pressed
                commission_errors += 1  # Incorrect response on no-go trial

        elif poly3.opacity == 0:  # Go trial
            if not key_resp.keys:  # If no key was pressed
                omission_errors += 1  # Missed response
            elif key_resp.keys[0] != corr_key:  # Wrong key press
                discrimination_errors += 1  # Incorrect key pressed

        # Send data to PsychoPy
        thisExp.addData("emo_image", emo_image)
        thisExp.addData("Emotion", selected_emo)
        thisExp.addData("trial_type", selected_trial_type)
        thisExp.addData("stop_signal_opacity", poly3.opacity)
        thisExp.addData("corr_key", corr_key)
        trials.addData('stimuli_color', shade)
        thisExp.addData("Key_Response", key_resp.keys)
        thisExp.addData("RT", key_resp.rt)
        thisExp.addData("Accuracy", key_resp.corr)
        thisExp.addData('Omission_Errors', omission_errors)
        thisExp.addData('Commission_Errors', commission_errors)
        thisExp.addData('Discrimination_Errors', discrimination_errors)

        trial_data.append({
            "Trial_No": thisTrialN,
            "Trial_Type": selected_trial_type,
            "Emotion": selected_emo,
            "StopSignalOpacity": poly3.opacity,
            "Key Response": key_resp.keys,
            "Accuracy": key_resp.corr,
            "Key_Response_RT": key_resp.rt,
            "Omission_Errors": omission_errors,
            "Commission_Errors": commission_errors,
            "Discrimination_Errors": discrimination_errors
        })
    KeyboardComponent key_resp
      allowedKeys = 'x','n',
      correctAns = corr_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    PolygonComponent fix
      fillColor = white
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $emo_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    PolygonComponent poly4
      fillColor [set every repeat] = $shade
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (300, 300)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent poly3
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.95
      stopVal [duration (s)] = .25
      units = pix
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    StaticComponent ISI
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1
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  Routine practice
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        feedback_omission_errors = 0
        feedback_commission_errors = 0
        feedback_discrimination_errors = 0
      Begin Routine:
        if random.random() < 0.5:
            shade = 'blue'
        else:
            shade = 'red'

        # Determine stop signal visibility
        if random.random() < 0.25:
            poly2.opacity = 1
        else:
            poly2.opacity = 0

        if poly2.opacity == 1:
            corr_key = None
        elif poly2.opacity == 0:
            if shade == 'blue':
                corr_key = 'n'
            else:
                corr_key = 'x'
      End Routine:
        if corr_key is None:  # No-go trial
            if key_resp_2.keys is not None:  # If any key was pressed
                feedback_commission_errors += 1  # Incorrect response on no-go trial

        elif corr_key is not None:  # Go trial
            if not key_resp_2.keys:  # If no key was pressed
                feedback_omission_errors += 1  # Missed response
            elif key_resp_2.keys and key_resp_2.keys[0] != corr_key:  # Wrong key press
                feedback_discrimination_errors += 1  # Incorrect key pressed

        # Send data to PsychoPy
        thisExp.addData("Practice_stop_signal_opacity", poly2.opacity)
        thisExp.addData("Practice_Key_Response", key_resp_2)
        thisExp.addData("Correct_Key", corr_key)
        thisExp.addData('Stimuli_Color', shade)
        thisExp.addData('Practice_Omission_Errors', feedback_omission_errors)
        thisExp.addData('Practice_Commission_Errors', feedback_commission_errors)
        thisExp.addData('Practice_Discrimination_Errors', feedback_discrimination_errors)
    PolygonComponent fix_2
      fillColor = white
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent poly1
      fillColor [set every repeat] = $shade
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (300, 300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.25
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'x','n'
      correctAns = $corr_key
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 2
      storeCorrect = True
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    PolygonComponent poly2
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = .25
      units = pix
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Flow
  Routine instruction
  LoopInitiator practice_trial loopType="TrialHandler"
    loopType = random
    nReps = 32
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    Routine practice
  LoopTerminator practice_trial
  Routine feedback
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 240
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    conditions:
      [{'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\a009.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\a010.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\a033.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\angry pose 2.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\Explosion 2.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\Frustrated pose 1.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\Police 2.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\Snake 4.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\Soldiers 7.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\Tornado 1.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\a034.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\a125.jpg'},
      {'Emotion': 'anger', 'ImageFile': 'd:\\UnI\\Year 3\\End-SEM\\PSY416\\solo\\experiment\\anger\\ambulance 1.jpg'}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
    Routine exp
  LoopTerminator trials
  Routine end
